PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [1152, 720]
  color = $[-1,-1,-1]
  expName = testing1
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine intro
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    TextboxComponent intro_text
      alignment = center-left
      bold = False
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Welcome to this research study on educational video content.

        (This study will take approximately 30 minutes to complete.)

        Your responses will be kept confidential and used for research
        purposes only. No personally identifying information will be shared
        in any publication resulting from this research.

        By continuing, you confirm that you agree to participate in this study.

        Press 'SPACE'  to continue.
    KeyboardComponent introresp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine warning
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    TextboxComponent warning_header
      bold = False
      editable = False
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.65)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
      text = IMPORTANT
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    TextboxComponent warning_text
      alignment = center-left
      bold = False
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, -0.15)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        - You will watch one video in full. Please do not skip, pause, or
          rewind during playback.
        - Pay close attention, as you will be tested on the content
          immediately afterward.
        - The video and quiz cannot be repeated once completed.
        - Please do not switch to other tabs, applications, or windows
          during the video.

        Press 'SPACE' when you are ready to begin the video.
    KeyboardComponent warning_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine video
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  Routine quiz
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  Routine likert
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    TextComponent likertText
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $itemText
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    SliderComponent likert_slider
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      labels = ('Strongly Disagree', 'Disagree', 'Neutral', 'Agree', 'Strongly Agree')
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.4, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ButtonComponent nextButton
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 1.0000, 1.0000
      font = Times New Roman
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.8, -0.75)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Next>>
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  Routine quizending
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    TextboxComponent textbox_2
      alignment = center-left
      bold = False
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        You have completed the quiz.

        Just a few more short questions about your experience, and then
        you'll be finished.

        Press 'SPACE' to continue.
    KeyboardComponent key_resp_quizending
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Thank you for participating in this study!

        Your responses have been recorded successfully.

        This window will be closed in 5s.
  Routine quizinstruction
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    TextboxComponent textbox
      alignment = center-left
      bold = False
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        Thank you for watching the video.

        You will now answer some questions about what you just watched.

        Please answer based on your own understanding.

        Before the main questions, you will first complete a short sample
        quiz to help you get familiar with how the questions work.

        Press 'SPACE' to begin the questions.
    KeyboardComponent quz_instruction_text
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextboxComponent instruction_header
      bold = True
      editable = False
      font = Times New Roman
      letterHeight = 0.15
      pos = (0, 0.65)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
      text = Instructions
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    TextboxComponent instruction_text
      alignment = center-left
      bold = False
      editable = False
      font = Times New Roman
      letterHeight = 0.1
      pos = (0, -0.05)
      size = (1.85, 0.5)
      startVal [time (s)] = 0.0
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      text:
        In this study, you will:

        1. Watch a short educational video
        2. Answer a series of questions about what you watched
        3. Answer a few questions about your experience

        Press 'SPACE' to continue.
    KeyboardComponent instruct_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine instructions
  Routine warning
  Routine video
  Routine quizinstruction
  Routine quiz
  Routine quizending
  LoopInitiator likertLoop loopType="TrialHandler"
    conditionsFile = likert_items.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'itemText': 'The video held my attention throughout.', 'type': 'rating', 'options': '1,2,3,4,5', 'layout': 'horiz'},
      {'itemText': 'The speaker was easy to understand.', 'type': 'rating', 'options': '1,2,3,4,5', 'layout': 'horiz'},
      {'itemText': 'I found the content engaging.', 'type': 'rating', 'options': '1,2,3,4,5', 'layout': 'horiz'},
      {'itemText': 'I would want to watch more videos like this.', 'type': 'rating', 'options': '1,2,3,4,5', 'layout': 'horiz'},
      {'itemText': 'The pacing of the video felt appropriate.', 'type': 'rating', 'options': '1,2,3,4,5', 'layout': 'horiz'}]
    Routine likert
  LoopTerminator likertLoop
  Routine end
